// configure channels
nuclei_channel = 1;
protein_channel = 2;

// Initialize GPU
run("CLIJ2 Macro Extensions", "cl_device=");
Ext.CLIJ2_clear();

// determine current image
orgName = getTitle();

// configure measurements (on CPU)
opt = "area mean centroid perimeter shape integrated display redirect=None decimal=3";
run("Set Measurements...", opt);

getDimensions(width, height, channels, slices, frames);
for (i = 0; i < frames; i ++) {
    // select channel and frame to analyze
    Stack.setChannel(nuclei_channel);
    Stack.setFrame(i + 1);
    
    // get a single-channel slice
    Ext.CLIJ2_pushCurrentSlice(orgName);
    
    // segment the nuclear envelope
    nucrimID = nucseg( orgName );

    // select the channel showing nuclear envelope signal
    Stack.setChannel(protein_channel);

    // pull segmented binary image as ROI from GPU
    Ext.CLIJ2_pullAsROI(nucrimID);

    // analyse it
    run("Measure");

    // reset selection
    run("Select None");
}

// This function segments the nuclear envelope in the nuclei-channel
function nucseg( orgID ){
    // Gaussian blur, basically for noise removal
    sigma = 1.5;
    Ext.CLIJ2_gaussianBlur2D(orgID, blurred, sigma, sigma);
    
    // thresholding / binarization
    Ext.CLIJ2_thresholdOtsu(blurred, thresholded);

    // fill holes
    Ext.CLIJ2_binaryFillHoles(thresholded, holes_filled);

    // identify individual objects
    Ext.CLIJ2_connectedComponentsLabelingBox(holes_filled, labels);

    // remove objects which touch image border
    Ext.CLIJ2_excludeLabelsOnEdges(labels, labels_wo_edges);

    // remove objects out of a given size range
    minimum_size = 800;
    maximum_size = 1000000;
    Ext.CLIJx_excludeLabelsOutsideSizeRange(labels_wo_edges, large_labels, minimum_size, maximum_size);

    // make the image binary again
    Ext.CLIJ2_greaterConstant(large_labels, binary_mask, 0);
    
    // dilate
    radius = 2;
    Ext.CLIJ2_maximum2DBox(binary_mask, dilateID, radius, radius);

    // erode
    Ext.CLIJ2_minimum2DBox(binary_mask, erodeID, radius, radius);

    // subtract eroded from dilated image to get a band corresponding to nuclear envelope
    Ext.CLIJ2_subtractImages(dilateID, erodeID, resultID);
    
    // return result
    return resultID;
}